PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'l_food': '["air_popcorn.jpg", "american_cheese.jpg", "apple_slices.jpg", "avacado.jpg", "baby_cheese.jpg", "bagel_and_cc.jpg", "bagel_plain.jpg", "baguette_oil.jpg", "baked_potato.jpg", "banana.jpg", "broccoli_cauliflower.jpg", "brownie.jpg", "burger.jpg", "celery_and_carrot_sticks.jpg", "cheese_nachos.jpg", "cherries.jpg", "cherry_tomato.jpg", "chicken_nuggets.jpg", "cookies.jpg", "corn_cob.jpg", "cucumber_slices.jpg", "cupcakes_am.jpg", "doughnuts.jpg", "eggs.jpg", "french_fries.jpg", "fried_eggs.jpg", "froot_loops_w_milk.jpg", "granola_w_milk.jpg", "grapes.jpg", "green_beans.jpg", "grilled_cheese.jpg", "grilled_chicken_strips.jpg", "hershey_kisses.jpg", "hotdog_w_must.jpg", "ice_cream_sundae.jpg", "kiwi.jpg", "lollipops.jpg", "mac_and_cheese.jpg", "mashed_potato.jpg", "mini_muffins.jpg", "mozarella_sticks.jpg", "mushrooms.jpg", "m_and_m.jpg", "one_percent_milk.jpg", "orange_slices.jpg", "PB.jpg", "peaches.jpg", "pickles.jpg", "pizza.jpg", "pretzels.jpg", "raisins.jpg", "raisin_bran_w_milk.jpg", "reeses.jpg", "rice_cakes.jpg", "rigatoni.jpg", "rigatoni_and_sauce.jpg", "ritz.jpg", "salad_w_chicken.jpg", "saltines.jpg", "seaweed.jpg", "skim_milk.jpg", "soup_with_spoon.jpg", "sour_patch.jpg", "soy_chips.jpg", "steak.jpg", "strawberries.jpg", "string_cheese.jpg", "sushi_w_condiments.jpg", "tacos.jpg", "trail_mix.jpg", "tribe_humus_pita.jpg", "turkey_sandwich.jpg", "whole_milk.jpg", "yellow_popcorn.jpg", "yogurt_no_spoon.jpg", "yogurt_pretzels.jpg"]', 'r_food': '["air_popcorn.jpg", "american_cheese.jpg", "apple_slices.jpg", "avacado.jpg", "baby_cheese.jpg", "bagel_and_cc.jpg", "bagel_plain.jpg", "baguette_oil.jpg", "baked_potato.jpg", "banana.jpg", "broccoli_cauliflower.jpg", "brownie.jpg", "burger.jpg", "celery_and_carrot_sticks.jpg", "cheese_nachos.jpg", "cherries.jpg", "cherry_tomato.jpg", "chicken_nuggets.jpg", "cookies.jpg", "corn_cob.jpg", "cucumber_slices.jpg", "cupcakes_am.jpg", "doughnuts.jpg", "eggs.jpg", "french_fries.jpg", "fried_eggs.jpg", "froot_loops_w_milk.jpg", "granola_w_milk.jpg", "grapes.jpg", "green_beans.jpg", "grilled_cheese.jpg", "grilled_chicken_strips.jpg", "hershey_kisses.jpg", "hotdog_w_must.jpg", "ice_cream_sundae.jpg", "kiwi.jpg", "lollipops.jpg", "mac_and_cheese.jpg", "mashed_potato.jpg", "mini_muffins.jpg", "mozarella_sticks.jpg", "mushrooms.jpg", "m_and_m.jpg", "one_percent_milk.jpg", "orange_slices.jpg", "PB.jpg", "peaches.jpg", "pickles.jpg", "pizza.jpg", "pretzels.jpg", "raisins.jpg", "raisin_bran_w_milk.jpg", "reeses.jpg", "rice_cakes.jpg", "rigatoni.jpg", "rigatoni_and_sauce.jpg", "ritz.jpg", "salad_w_chicken.jpg", "saltines.jpg", "seaweed.jpg", "skim_milk.jpg", "soup_with_spoon.jpg", "sour_patch.jpg", "soy_chips.jpg", "steak.jpg", "strawberries.jpg", "string_cheese.jpg", "sushi_w_condiments.jpg", "tacos.jpg", "trail_mix.jpg", "tribe_humus_pita.jpg", "turkey_sandwich.jpg", "whole_milk.jpg", "yellow_popcorn.jpg", "yogurt_no_spoon.jpg", "yogurt_pretzels.jpg"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/devaluation_training_data.csv', 'resources/air_popcorn.jpg', 'resources/air_popcorn_deval.jpg', 'resources/american_cheese.jpg', 'resources/american_cheese_deval.jpg', 'resources/apple_slices.jpg', 'resources/apple_slices_deval.jpg', 'resources/avacado.jpg', 'resources/avacado_deval.jpg', 'resources/baby_cheese.jpg', 'resources/baby_cheese_deval.jpg', 'resources/bagel_and_cc.jpg', 'resources/bagel_and_cc_deval.jpg', 'resources/bagel_plain.jpg', 'resources/bagel_plain_deval.jpg', 'resources/baguette_oil.jpg', 'resources/baguette_oil_deval.jpg', 'resources/baked_potato.jpg', 'resources/baked_potato_deval.jpg', 'resources/banana.jpg', 'resources/banana_deval.jpg', 'resources/blank.png', 'resources/broccoli_cauliflower.jpg', 'resources/broccoli_cauliflower_deval.jpg', 'resources/brownie.jpg', 'resources/brownie_deval.jpg', 'resources/burger.jpg', 'resources/burger_deval.jpg', 'resources/celery_and_carrot_sticks.jpg', 'resources/celery_and_carrot_sticks_deval.jpg', 'resources/cheese_nachos.jpg', 'resources/cheese_nachos_deval.jpg', 'resources/cherries.jpg', 'resources/cherries_deval.jpg', 'resources/cherry_tomato.jpg', 'resources/cherry_tomato_deval.jpg', 'resources/chicken_nuggets.jpg', 'resources/chicken_nuggets_deval.jpg', 'resources/cookies.jpg', 'resources/cookies_deval.jpg', 'resources/corn_cob.jpg', 'resources/corn_cob_deval.jpg', 'resources/cucumber_slices.jpg', 'resources/cucumber_slices_deval.jpg', 'resources/cupcakes_am.jpg', 'resources/cupcakes_am_deval.jpg', 'resources/devaluation_training_data.csv', 'resources/doughnuts.jpg', 'resources/doughnuts_deval.jpg', 'resources/dummy1.png', 'resources/dummy2.png', 'resources/dummy3.png', 'resources/eggs.jpg', 'resources/eggs_deval.jpg', 'resources/exp_training_data.csv', 'resources/french_fries.jpg', 'resources/french_fries_deval.jpg', 'resources/fried_eggs.jpg', 'resources/fried_eggs_deval.jpg', 'resources/froot_loops_w_milk.jpg', 'resources/froot_loops_w_milk_deval.jpg', 'resources/granola_w_milk.jpg', 'resources/granola_w_milk_deval.jpg', 'resources/grapes.jpg', 'resources/grapes_deval.jpg', 'resources/green_beans.jpg', 'resources/green_beans_deval.jpg', 'resources/grilled_cheese.jpg', 'resources/grilled_cheese_deval.jpg', 'resources/grilled_chicken_strips.jpg', 'resources/grilled_chicken_strips_deval.jpg', 'resources/hershey_kisses.jpg', 'resources/hershey_kisses_deval.jpg', 'resources/hotdog_w_must.jpg', 'resources/hotdog_w_must_deval.jpg', 'resources/ice_cream_sundae.jpg', 'resources/ice_cream_sundae_deval.jpg', 'resources/kiwi.jpg', 'resources/kiwi_deval.jpg', 'resources/late.png', 'resources/lollipops.jpg', 'resources/lollipops_deval.jpg', 'resources/m_and_m.jpg', 'resources/m_and_m_deval.jpg', 'resources/mac_and_cheese.jpg', 'resources/mac_and_cheese_deval.jpg', 'resources/mashed_potato.jpg', 'resources/mashed_potato_deval.jpg', 'resources/mini_muffins.jpg', 'resources/mini_muffins_deval.jpg', 'resources/mozarella_sticks.jpg', 'resources/mozarella_sticks_deval.jpg', 'resources/mushrooms.jpg', 'resources/mushrooms_deval.jpg', 'resources/one_percent_milk.jpg', 'resources/one_percent_milk_deval.jpg', 'resources/orange_slices.jpg', 'resources/orange_slices_deval.jpg', 'resources/p_food_left.png', 'resources/p_food_right.png', 'resources/p_plate.png', 'resources/PB.jpg', 'resources/PB_deval.jpg', 'resources/peaches.jpg', 'resources/peaches_deval.jpg', 'resources/pickles.jpg', 'resources/pickles_deval.jpg', 'resources/pizza.jpg', 'resources/pizza_deval.jpg', 'resources/plate.png', 'resources/practice_data.csv', 'resources/pretzels.jpg', 'resources/pretzels_deval.jpg', 'resources/raisin_bran_w_milk.jpg', 'resources/raisin_bran_w_milk_deval.jpg', 'resources/raisins.jpg', 'resources/raisins_deval.jpg', 'resources/randomization_list.csv', 'resources/rating.csv', 'resources/reeses.jpg', 'resources/reeses_deval.jpg', 'resources/rice_cakes.jpg', 'resources/rice_cakes_deval.jpg', 'resources/rigatoni.jpg', 'resources/rigatoni_and_sauce.jpg', 'resources/rigatoni_and_sauce_deval.jpg', 'resources/rigatoni_deval.jpg', 'resources/ritz.jpg', 'resources/ritz_deval.jpg', 'resources/salad_w_chicken.jpg', 'resources/salad_w_chicken_deval.jpg', 'resources/saltines.jpg', 'resources/saltines_deval.jpg', 'resources/seaweed.jpg', 'resources/seaweed_deval.jpg', 'resources/Set1A.jpg', 'resources/Set1B.jpg', 'resources/Set1C.jpg', 'resources/Set2A.jpg', 'resources/Set2A_faded.png', 'resources/Set2B.jpg', 'resources/Set2B_faded.png', 'resources/Set2C.jpg', 'resources/Set2C_faded.png', 'resources/Set3A.jpg', 'resources/Set3A_faded.png', 'resources/Set3B.jpg', 'resources/Set3B_faded.png', 'resources/Set3C.jpg', 'resources/Set3C_faded.png', 'resources/skim_milk.jpg', 'resources/skim_milk_deval.jpg', 'resources/soup_with_spoon.jpg', 'resources/soup_with_spoon_deval.jpg', 'resources/sour_patch.jpg', 'resources/sour_patch_deval.jpg', 'resources/soy_chips.jpg', 'resources/soy_chips_deval.jpg', 'resources/steak.jpg', 'resources/steak_deval.jpg', 'resources/strawberries.jpg', 'resources/strawberries_deval.jpg', 'resources/string_cheese.jpg', 'resources/string_cheese_deval.jpg', 'resources/sushi_w_condiments.jpg', 'resources/sushi_w_condiments_deval.jpg', 'resources/tacos.jpg', 'resources/tacos_deval.jpg', 'resources/trail_mix.jpg', 'resources/trail_mix_deval.jpg', 'resources/training_data.csv', 'resources/trial_data.csv', 'resources/tribe_humus_pita.jpg', 'resources/tribe_humus_pita_deval.jpg', 'resources/turkey_sandwich.jpg', 'resources/turkey_sandwich_deval.jpg', 'resources/whole_milk.jpg', 'resources/whole_milk_deval.jpg', 'resources/yellow_popcorn.jpg', 'resources/yellow_popcorn_deval.jpg', 'resources/yogurt_no_spoon.jpg', 'resources/yogurt_no_spoon_deval.jpg', 'resources/yogurt_pretzels.jpg', 'resources/yogurt_pretzels_deval.jpg']
  Screen = 1
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = AHT money
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent constants
      Code Type = Both
      Begin Experiment:
        # Retrieve the values from the experiment info dialog and prepend 'resources/'
        left_food = 'resources/' + expInfo['l_food']
        right_food = 'resources/' + expInfo['r_food']

        # Modifying the file names to add '_deval' before the '.jpg' extension
        left_food_deval = left_food.replace('.jpg', '_deval.jpg')
        right_food_deval = right_food.replace('.jpg', '_deval.jpg')
      Begin JS Experiment:
        // Retrieve the values from the experiment info dialog and prepend 'resources/'
        left_food = 'resources/' + expInfo['l_food'];
        right_food = 'resources/' + expInfo['r_food'];

        // Function to modify the file name to add '_deval' before the '.jpg' extension
        function addDeval(filename) {
            if (filename.includes('.jpg')) {
                return filename.replace('.jpg', '_deval.jpg');
            }
            return filename;
        }

        // Creating devalued versions of the file names
        left_food_deval = addDeval(left_food);
        right_food_deval = addDeval(right_food);

        var mapping;
        var mapping_practice;
        var mapping_training;
        var stimulus_training;
        var stimulus_practice;
      Begin JS Routine:
        // Define the structure of the data based on the provided table
        const dataStructure = [
            ['left', 'right', 'safe', 1],
            ['left', 'safe', 'right', 1],
            ['right', 'left', 'safe', 1],
            ['right', 'safe', 'left', 1],
            ['safe', 'left', 'right', 1],
            ['safe', 'right', 'left', 1],
            ['left', 'right', 'safe', 2],
            ['left', 'safe', 'right', 2],
            ['right', 'left', 'safe', 2],
            ['right', 'safe', 'left', 2],
            ['safe', 'left', 'right', 2],
            ['safe', 'right', 'left', 2]
        ];

        // Pick a random number from 1 to 12
        const randomization = Math.floor(Math.random() * 12) + 1;

        // Assign the variables CS1, CS2, CS3, and devaluation based on the random number
        let [CS1, CS2, CS3, devaluation] = dataStructure[randomization - 1];

        // Define CR1 based on the value of CS1
        let CR1;
        if (CS1 === 'left') {
            CR1 = 'x';
        } else if (CS1 === 'right') {
            CR1 = 'm';
        } else {
            CR1 = 'safe';
        }

        // Define CR2 based on the value of CS2
        let CR2;
        if (CS2 === 'left') {
            CR2 = 'x';
        } else if (CS2 === 'right') {
            CR2 = 'm';
        } else {
            CR2 = 'safe';
        }

        // Define CR3 based on the value of CS3
        let CR3;
        if (CS3 === 'left') {
            CR3 = 'x';
        } else if (CS3 === 'right') {
            CR3 = 'm';
        } else {
            CR3 = 'safe';
        }

        // DEVAL is already defined from your previous code
        DEVAL = devaluation;

        // Initialize an object to map condition strings to their corresponding CR values
        cr_mapping = { 'CR1': CR1, 'CR2': CR2, 'CR3': CR3 };

        psychoJS.experiment.addData("randomization", randomization);
        psychoJS.experiment.addData("CR1", CR1);
        psychoJS.experiment.addData("CR2", CR2);
        psychoJS.experiment.addData("CR3", CR3);
        psychoJS.experiment.addData("deval", DEVAL);
      Begin Routine:
        import random

        # Define the structure of the data based on the provided table
        data_structure = [
            ('left', 'right', 'safe', 1),
            ('left', 'safe', 'right', 1),
            ('right', 'left', 'safe', 1),
            ('right', 'safe', 'left', 1),
            ('safe', 'left', 'right', 1),
            ('safe', 'right', 'left', 1),
            ('left', 'right', 'safe', 2),
            ('left', 'safe', 'right', 2),
            ('right', 'left', 'safe', 2),
            ('right', 'safe', 'left', 2),
            ('safe', 'left', 'right', 2),
            ('safe', 'right', 'left', 2)
        ]

        # Pick a random number from 1 to 12
        randomization = random.randint(1, 12)

        # Assign the variables CS1, CS2, CS3, and devaluation based on the random number
        # Note: Python uses 0-based indexing, so we subtract 1 from the random number
        CS1, CS2, CS3, devaluation = data_structure[randomization - 1]

        # Define CR1 based on the value of CS1
        if CS1 == 'left':
            CR1 = 'x'
        elif CS1 == 'right':
            CR1 = 'm'
        else:
            CR1 = 'safe'

        # Define CR2 based on the value of CS2
        if CS2 == 'left':
            CR2 = 'x'
        elif CS2 == 'right':
            CR2 = 'm'
        else:
            CR2 = 'safe'

        # Define CR3 based on the value of CS3
        if CS3 == 'left':
            CR3 = 'x'
        elif CS3 == 'right':
            CR3 = 'm'
        else:
            CR3 = 'safe'

        # DEVAL is already defined from your previous code
        DEVAL = devaluation

        # Initialize a dictionary to map condition strings to their corresponding CR values
        cr_mapping = {'CR1': CR1, 'CR2': CR2, 'CR3': CR3}

        thisExp.addData('randomization', randomization)
        thisExp.addData('CR1', CR1)
        thisExp.addData('CR2', CR2)
        thisExp.addData('CR3', CR3)
        thisExp.addData('deval', DEVAL)
    TextComponent welcome_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!


        Press SPACE to continue
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    ImageComponent image_trial
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp_trial
      allowedKeys = 'm', 'x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine instructions_demo
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    TextComponent text_inst_demo
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to continue
    KeyboardComponent key_resp_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False

        if key_resp_trial.keys is not None and key_resp_trial.rt < 0.75:
            continueRoutine = True

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'real_task')
    ImageComponent feedback_1
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial.rt
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  Routine rating
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    SliderComponent slider
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ['It definitely does not \n0%', 'Unsure \n50%', 'It definitely does \n100%']
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.9, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0, 50, 100]
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    KeyboardComponent key_resp_slider
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_slider
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Does this stimulus currently predict food delivery?

        Use a mouse to indicate your response on the slider then press SPACE to lock your response.
    ImageComponent image_slider
      image [set every repeat] = $rating_stimulus
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine rating_prep
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine onset
    RoutineSettingsComponent onset
      stopVal [duration (s)] = 0.5
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  Routine feedback2
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    CodeComponent code_feedback2
      Code Type = Both
      Begin JS Routine:
        condition_new = cr_mapping.hasOwnProperty(mapping) ? cr_mapping[mapping] : 'safe';
        correct = 1;
        if ((condition_new === "safe")) {
            l_image_feedback2.setImage("resources/plate.png");
            r_image_feedback2.setImage("resources/plate.png");
        } else {
            if (((key_resp_trial.keys === undefined) || (key_resp_trial.keys !== condition_new))) {
                if ((condition_new === "x")) {
                    l_image_feedback2.setImage(left_food);
                    r_image_feedback2.setImage("resources/plate.png");
                } else {
                    if ((condition_new === "m")) {
                        l_image_feedback2.setImage("resources/plate.png");
                        r_image_feedback2.setImage(right_food);
                    }
                }
                correct = 0;
            } else {
                if ((condition_new === "x")) {
                    l_image_feedback2.setImage("resources/plate.png");
                    r_image_feedback2.setImage("resources/plate.png");
                } else {
                    if ((condition_new === "m")) {
                        l_image_feedback2.setImage("resources/plate.png");
                        r_image_feedback2.setImage("resources/plate.png");
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition_new", condition_new);
        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new = cr_mapping.get(mapping, 'safe')  # Default to 'safe' if condition not found
        correct = 1  # Assume the response is correct initially

        if condition_new == 'safe':
            # You can add code here if needed for the 'safe' condition
            l_image_feedback2.setImage('resources/plate.png')
            r_image_feedback2.setImage('resources/plate.png')
        elif key_resp_trial.keys is None or key_resp_trial.keys != condition_new:
            # Define feedback image for incorrect response
            if condition_new == 'x':
                l_image_feedback2.setImage(left_food)
                r_image_feedback2.setImage('resources/plate.png')
            elif condition_new == 'm':
                l_image_feedback2.setImage('resources/plate.png')
                r_image_feedback2.setImage(right_food)
            correct = 0
        else:
            if condition_new == 'x':
                l_image_feedback2.setImage('resources/plate.png')
                r_image_feedback2.setImage('resources/plate.png')
            elif condition_new == 'm':
                l_image_feedback2.setImage('resources/plate.png')
                r_image_feedback2.setImage('resources/plate.png')

        thisExp.addData('condition_new', condition_new)
        thisExp.addData('correct', correct)
    ImageComponent l_image_feedback2
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_feedback2
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine devaluation
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    CodeComponent code_devaluation
      Code Type = Auto->JS
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      Begin Experiment:
        repeat_deval_2 = 0
      Begin Routine:
        if DEVAL == 1:
            left_image_devaluation_2.setImage(left_food)
            right_image_devaluation_2.setImage(right_food_deval)
            thisExp.addData('devaluated_image', 'right')
            correct_deval_key_2 = 'x'
            txt_devaluation_2 = 'The food on the right is no longer available, so you do not need to prevent its delivery anymore.\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress SPACE to continue'
        elif DEVAL == 2:
            left_image_devaluation_2.setImage(left_food_deval)
            right_image_devaluation_2.setImage(right_food)
            thisExp.addData('devaluated_image', 'left')
            correct_deval_key_2 = 'm'
            txt_devaluation_2 = 'The food on the left is no longer available, so you do not need to prevent its delivery anymore.\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress SPACE to continue'
    ImageComponent left_image_devaluation_2
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent right_image_devaluation_2
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_devaluation_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_devaluation_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $txt_devaluation_2
  Routine feedback_after_devaluation
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    CodeComponent code_feedback_after
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False

        if key_resp_trial.keys is not None and key_resp_trial.rt < 0.75:
            continueRoutine = True


        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'real_task_after_deval')
    ImageComponent feedback_after
      image [set every repeat] = $stimulus
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial.rt
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  Routine feedback_2_after
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    CodeComponent code_feedback_2_after
      Code Type = Both
      Begin JS Routine:
        condition_new = cr_mapping.hasOwnProperty(mapping) ? cr_mapping[mapping] : 'safe';

        correct = 1;
        l_image_feedback_2_after.setImage("resources/blank.png");
        r_image_feedback_2_after.setImage("resources/blank.png");
        if ((condition_new === "safe")) {
            correct = 1;
        } else {
            if ((DEVAL === 1)) {
                if ((condition_new === "m")) {
                    if (((key_resp_trial.keys === "m") || (key_resp_trial.keys === "x"))) {
                        correct = 0;
                    } else {
                        correct = 1;
                    }
                } else {
                    if ((condition_new === "x")) {
                        if ((key_resp_trial.keys === "x")) {
                            correct = 1;
                        } else {
                            correct = 0;
                        }
                    }
                }
            } else {
                if ((DEVAL === 2)) {
                    if ((condition_new === "x")) {
                        if (((key_resp_trial.keys === "x") || (key_resp_trial.keys === "m"))) {
                            correct = 0;
                        } else {
                            correct = 1;
                        }
                    } else {
                        if ((condition_new === "m")) {
                            if ((key_resp_trial.keys === "m")) {
                                correct = 1;
                            } else {
                                correct = 0;
                            }
                        }
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition_new", condition_new);
        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new = cr_mapping.get(mapping, 'safe')  # Default to 'safe' if condition not found

        correct = 1  # Assume the response is correct initially

        # Initial setup for the image feedback
        l_image_feedback_2_after.setImage('resources/blank.png')
        r_image_feedback_2_after.setImage('resources/blank.png')

        # Check conditions based on DEVAL and condition_new
        if condition_new == 'safe':
            correct = 1
        else:
            if DEVAL == 1:
                if condition_new == 'm':
                    if key_resp_trial.keys == 'm' or key_resp_trial.keys == 'x':
                        correct = 0
                    else:
                        correct = 1
                elif condition_new == 'x':
                    if key_resp_trial.keys == 'x':
                        correct = 1
                    else:
                        correct = 0
            elif DEVAL == 2:
                if condition_new == 'x':
                    if key_resp_trial.keys == 'x' or key_resp_trial.keys == 'm':
                        correct = 0
                    else:
                        correct = 1
                elif condition_new == 'm':
                    if key_resp_trial.keys == 'm':
                        correct = 1
                    else:
                        correct = 0

        thisExp.addData('condition_new', condition_new)
        thisExp.addData('correct', correct)
    ImageComponent l_image_feedback_2_after
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_feedback_2_after
      pos = (0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine to_ratings
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    KeyboardComponent key_resp_to_ratings
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_to_ratings
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please answer the following question using the mouse to move the cursor to the appropriate point. When you have determined your response, you can press SPACE to lock in your response.



        Press SPACE to continue
  Routine expectancy_rating
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    ImageComponent image_exp_rating
      image [set every repeat] = $rating_stimulus
      pos = (0, 0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_exp_rating
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ['It definitely does not \n0%', 'Unsure \n50%' , 'It definitely does \n100%']
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.9, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0, 50,100]
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    KeyboardComponent key_resp_exp_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_exp_rating
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Does this stimulus currently predict food delivery?

        Use a mouse to indicate your response on the slider then press SPACE to lock your response.
    CodeComponent code_save_phase
      Code Type = Auto->JS
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      Begin Routine:
        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'rating_expectancy')
  Routine urge_rating
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    CodeComponent code_urge_rating
      Code Type = Auto->JS
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      Begin Routine:
        if DEVAL == 1:
            urge_stim = right_food
            pos_urge_stim = (0.25,0.05)
        elif DEVAL == 2:
            urge_stim = left_food
            pos_urge_stim = (-0.25,0.05)

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'rating_urge')
        thisExp.addData ('urge_stim', urge_stim)
    ImageComponent image_urge_rating
      image [set every repeat] = $urge_stim
      pos [set every repeat] = pos_urge_stim
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_urge_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SliderComponent slider_urge_rating
      color = White
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ['No urge \n0%', 'Moderate urge \n50%', 'Great urge \n100%']
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.9, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0, 50, 100]
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    TextComponent text_urge_rating
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the final section you no longer had to guard this piggybank. Did you experience an urge to continue to responding?

        Use a mouse to indicate your response on the slider then press SPACE to lock your response.
  Routine urge_sup_rating
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    KeyboardComponent key_resp_urge_sup_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SliderComponent slider_urge_sup_rating
      color = White
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ['No effort to suppress \n0%', 'Moderate effort to suppress \n50%', 'Great effort to suppress \n100%']
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.9, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0, 50, 100]
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    TextComponent text_urge_sup_rating
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you did experience an urge, did you attempt to suppress this urge?

        Use a mouse to indicate your response on the slider then press SPACE to lock your response.
    CodeComponent code_save_phase2
      Code Type = Auto->JS
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      Begin Routine:
        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'rating_urge_sup')
  Routine end
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    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_end
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of experiment. Thank you for participating!

        DO NOT close this window yet. After pressing SPACE, wait until the message 'Thank you for your patience' appears on your screen. Then click 'Ok' with your mouse to close the experiment.


        Press SPACE to close the experiment
  Routine instruction_exp
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please answer the following question using the mouse to move the cursor to the appropriate point. When you have determined your response, you can press SPACE to lock in your response.

        Press SPACE to continue
  Routine initialize_condition
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    CodeComponent code_initialize_condition
      Code Type = Both
      Begin JS Routine:
        let condition;
  Routine trial_practice
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    ImageComponent image_trial_practice
      image [set every repeat] = $stimulus_practice
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp_trial_practice
      allowedKeys = 'x', 'm'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine feedback_practice
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    ImageComponent image_feedback_practice
      image [set every repeat] = $stimulus_practice
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial_practice.rt
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    CodeComponent code_feedback_practice
      Code Type = Both
      Begin JS Routine:
        continueRoutine = false;
        if (((key_resp_trial_practice.keys !== undefined) && (key_resp_trial_practice.rt < 0.75))) {
            continueRoutine = true;
        }

        //psychoJS.experiment.addData("randomization", randomization);
        //psychoJS.experiment.addData("CR1", CR1);
        //psychoJS.experiment.addData("CR2", CR2);
        //psychoJS.experiment.addData("CR3", CR3);
        psychoJS.experiment.addData("phase", "practice2");
      Begin Routine:
        continueRoutine = False

        if key_resp_trial_practice.keys is not None and key_resp_trial_practice.rt < 0.75:
            continueRoutine = True

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'practice2')
  Routine feedback2_practice
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    CodeComponent code_feedback2_practice
      Code Type = Both
      Begin JS Routine:
        condition_new_p = cr_mapping.hasOwnProperty(mapping_practice) ? cr_mapping[mapping_practice] : 'safe';
        if ((condition_new_p === "safe")) {
            l_image_feedback2_practice.setImage("resources/p_plate.png");
            r_image_feedback2_practice.setImage("resources/p_plate.png");
            total_correct += 1;
        } else {
            if (((key_resp_trial_practice.keys === undefined) || (key_resp_trial_practice.keys !== condition_new_p))) {
                if ((condition_new_p === "x")) {
                    l_image_feedback2_practice.setImage("resources/p_food_left.png");
                    r_image_feedback2_practice.setImage("resources/p_plate.png");
                } else {
                    if ((condition_new_p === "m")) {
                        l_image_feedback2_practice.setImage("resources/p_plate.png");
                        r_image_feedback2_practice.setImage("resources/p_food_right.png");
                    }
                }
            } else {
                if ((condition_new_p === "x")) {
                    l_image_feedback2_practice.setImage("resources/p_plate.png");
                    r_image_feedback2_practice.setImage("resources/p_plate.png");
                } else {
                    if ((condition_new_p === "m")) {
                        l_image_feedback2_practice.setImage("resources/p_plate.png");
                        r_image_feedback2_practice.setImage("resources/p_plate.png");
                    }
                }
                total_correct += 1;
            }
        }
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new_p = cr_mapping.get(mapping_practice, 'safe')

         # Assume the response is correct initially
        if condition_new_p == 'safe':
            # You can add code here if needed for the 'safe' condition
            l_image_feedback2_practice.setImage('resources/p_plate.png')
            r_image_feedback2_practice.setImage('resources/p_plate.png')
            total_correct += 1
        elif key_resp_trial_practice.keys is None or key_resp_trial_practice.keys != condition_new_p:
            # Define feedback image for incorrect response
            if condition_new_p == 'x':
                l_image_feedback2_practice.setImage('resources/p_food_left.png')
                r_image_feedback2_practice.setImage('resources/p_plate.png')
            elif condition_new_p == 'm':
                l_image_feedback2_practice.setImage('resources/p_plate.png')
                r_image_feedback2_practice.setImage('resources/p_food_right.png')
        else:
            if condition_new_p == 'x':
                l_image_feedback2_practice.setImage('resources/p_plate.png')
                r_image_feedback2_practice.setImage('resources/p_plate.png')
            elif condition_new_p == 'm':
                l_image_feedback2_practice.setImage('resources/p_plate.png')
                r_image_feedback2_practice.setImage('resources/p_plate.png')
            total_correct += 1
    ImageComponent l_image_feedback2_practice
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_feedback2_practice
      pos = (0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine repeat_or_not
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    CodeComponent code_repeat_or_not
      Code Type = Both
      Begin JS Routine:
        if (repeat < 15) {
            if (total_correct < 5) {
                repeat += 1;
                total_correct = 0;
                text_repeat = "You had more than one mistake. Try again and be as accurate as possible. \n\n\nPress SPACE to start the practice session again.";
                trials_outer_practice.finished = false;
            } else {
                text_repeat = "This is the end of the practice session. \n\n\n Press SPACE to continue with instructions.";
                trials_outer_practice.finished = true;
            }
        } else {
            if (repeat === 15) {
                // Display closing message
                alert("You did not successfully complete the practice session after 15 trials. We appreciate your participation and effort. The experiment will now end.");

                // End the experiment
                psychoJS.quit({message: 'Experiment ended after practice session.'});
            }
        }


        psychoJS.experiment.addData('repeat', repeat);
        psychoJS.experiment.addData('total_correct', total_correct);
      Begin Routine:
        if repeat < 15:
            if total_correct < 5:
                repeat += 1
                total_correct = 0  # Reset for the next round
                text_repeat = 'You had more than one mistake. Try again and be as accurate as possible. \n\n\nPress SPACE to start the practice session again.'
                trials_outer_practice.finished = False
            else:
                text_repeat = 'This is the end of the practice session. \n\n\n Press SPACE to continue with instructions.'
                trials_outer_practice.finished = True
        elif repeat == 15:
            # End the experiment
            thisExp.abort()  # safely close the experiment
            win.close()      # close the window
            core.quit()      # and quit


        thisExp.addData('repeat', repeat)
        thisExp.addData('total_correct', total_correct)
    KeyboardComponent key_resp_repeat_or_not
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_repeat_or_not
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_repeat
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  Routine to_training
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    KeyboardComponent key_resp_to_training
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_to_training
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will start the real task. The images will be different, but the rules stay the same.

        Remember, that one trial from the task will be randomly selected, and your action on the selected trial will determine your snack today.


        Press SPACE to continue
  Routine trial_training
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    ImageComponent image_trial_training
      image [set every repeat] = $stimulus_training
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp_trial_training
      allowedKeys = 'm', 'x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine feedback_training
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    CodeComponent code_training_fb
      Code Type = Both
      Begin JS Routine:
        continueRoutine = false;
        if (((key_resp_trial_training.keys !== undefined) && (key_resp_trial_training.rt < 0.75))) {
            continueRoutine = true;
        }

        //psychoJS.experiment.addData("randomization", randomization);
        //psychoJS.experiment.addData("CR1", CR1);
        //psychoJS.experiment.addData("CR2", CR2);
        //psychoJS.experiment.addData("CR3", CR3);
        psychoJS.experiment.addData("phase", "training");
      Begin Routine:
        continueRoutine = False
        if key_resp_trial_training.keys is not None and key_resp_trial_training.rt < 0.75:
            continueRoutine = True

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'training')
    ImageComponent image_feedback_training
      image [set every repeat] = $stimulus_training
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial_training.rt
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  Routine feedback2_training
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    CodeComponent code_feedback_training
      Code Type = Both
      Begin JS Routine:
        condition_new_t = cr_mapping.hasOwnProperty(mapping_training) ? cr_mapping[mapping_training] : 'safe';

        correct = 1;
        if ((condition_new_t === "safe")) {
            l_image_feedback2_training.setImage("resources/plate.png");
            r_image_feedback2_training.setImage("resources/plate.png");
        } else {
            if (((key_resp_trial_training.keys === null) || (key_resp_trial_training.keys !== condition_new_t))) {
                correct = 0;
                if ((condition_new_t === "x")) {
                    l_image_feedback2_training.setImage(left_food);
                    r_image_feedback2_training.setImage("resources/plate.png");
                } else {
                    if ((condition_new_t === "m")) {
                        l_image_feedback2_training.setImage("resources/plate.png");
                        r_image_feedback2_training.setImage(right_food);
                    }
                }
            } else {
                if ((condition_new_t === "x")) {
                    l_image_feedback2_training.setImage("resources/plate.png");
                    r_image_feedback2_training.setImage("resources/plate.png");
                } else {
                    if ((condition_new_t === "m")) {
                        l_image_feedback2_training.setImage("resources/plate.png");
                        r_image_feedback2_training.setImage("resources/plate.png");
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition_new_t", condition_new_t);
        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new_t = cr_mapping.get(mapping_training, 'safe')  # Default to 'safe' if condition not found
        correct = 1
        if condition_new_t == 'safe':
            l_image_feedback2_training.setImage('resources/plate.png')
            r_image_feedback2_training.setImage('resources/plate.png')
        elif key_resp_trial_training.keys is None or key_resp_trial_training.keys != condition_new_t:
            correct = 0
            if condition_new_t == 'x':
                l_image_feedback2_training.setImage(left_food)
                r_image_feedback2_training.setImage("resources/plate.png")
            elif condition_new_t == 'm':
                l_image_feedback2_training.setImage("resources/plate.png")
                r_image_feedback2_training.setImage(right_food)
        else:
            if condition_new_t == 'x':
                l_image_feedback2_training.setImage("resources/plate.png")
                r_image_feedback2_training.setImage("resources/plate.png")
            elif condition_new_t == 'm':
                l_image_feedback2_training.setImage("resources/plate.png")
                r_image_feedback2_training.setImage("resources/plate.png")

        thisExp.addData('condition_new_t', condition_new_t)
        thisExp.addData('correct', correct)
    ImageComponent l_image_feedback2_training
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_feedback2_training
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine training_deval
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    CodeComponent code_training_deval
      Code Type = Auto->JS
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      Begin Experiment:
        repeat_deval = 0
      Begin Routine:
        if DEVAL == 1:
            t_left_image_devaluation.setImage(left_food_deval)
            t_right_image_devaluation.setImage(right_food)
            thisExp.addData('devaluated_image', 'left')
            correct_deval_key = 'm'
            text_devaluation_training = 'The food on the left is no longer available, so you do not need to prevent its delivery anymore.\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress SPACE to continue'
        elif DEVAL == 2:
            t_left_image_devaluation.setImage(left_food)
            t_right_image_devaluation.setImage(right_food_deval)
            thisExp.addData('devaluated_image', 'right')
            correct_deval_key = 'x'
            text_devaluation_training = 'The food on the right is no longer available, so you do not need to prevent its delivery anymore.\n\n\n\n\n\n\n\n\n\n\n\n\n\nPress SPACE to continue'
    ImageComponent t_left_image_devaluation
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent t_right_image_devaluation
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_training_devaluation
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_training_devaluation
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_devaluation_training
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  Routine fb_t_after_deval
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    CodeComponent code_fb_t_after_deval
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False
        if key_resp_trial_training.keys is not None and key_resp_trial_training.rt < 0.75:
            continueRoutine = True

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'training_after_deval')
    ImageComponent image_fb_t_after_deval
      image [set every repeat] = $stimulus_training
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial_training.rt
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  Routine fb2_t_after_deval
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    CodeComponent code_fb2_after_deval
      Code Type = Both
      Begin JS Routine:
        condition_new_t2 = cr_mapping.hasOwnProperty(mapping_training) ? cr_mapping[mapping_training] : 'safe';

        correct = 1;
        l_image_fb2_after_deval.setImage("resources/blank.png");
        r_image_fb2_after_deval.setImage("resources/blank.png");
        if ((condition_new_t2 === "safe")) {
            correct = 1;
        } else {
            if ((DEVAL === 2)) {
                if ((condition_new_t2 === "m")) {
                    if ((key_resp_trial_training.keys === undefined)) {
                        correct = 1;
                    } else {
                        correct = 0;
                    }
                } else {
                    if ((condition_new_t2 === "x")) {
                        if ((key_resp_trial_training.keys === "x")) {
                            correct = 1;
                        } else {
                            correct = 0;
                        }
                    }
                }
            } else {
                if ((DEVAL === 1)) {
                    if ((condition_new_t2 === "x")) {
                        if ((key_resp_trial_training.keys === undefined)) {
                            correct = 1;
                        } else {
                            correct = 0;
                        }
                    } else {
                        if ((condition_new_t2 === "m")) {
                            if ((key_resp_trial_training.keys === "m")) {
                                correct = 1;
                            } else {
                                correct = 0;
                            }
                        }
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition_new_t2", condition_new_t2);
        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new_t2 = cr_mapping.get(mapping_training, 'safe')  # Default to 'safe' if condition not found
        correct = 1  # Assume the response is correct initially

        # Initial setup for the image feedback
        l_image_fb2_after_deval.setImage('resources/blank.png')
        r_image_fb2_after_deval.setImage('resources/blank.png')

        # Check conditions based on DEVAL and condition_new_t2
        if condition_new_t2 == 'safe':
            correct = 1
        else:
            if DEVAL == 2:
                if condition_new_t2 == 'm':
                    if key_resp_trial_training.keys is None:
                        correct = 1
                    else:
                        correct = 0
                elif condition_new_t2 == 'x':
                    if key_resp_trial_training.keys == 'x':
                        correct = 1
                    else:
                        correct = 0
            elif DEVAL == 1:
                if condition_new_t2 == 'x':
                    if key_resp_trial_training.keys is None:
                        correct = 1
                    else:
                        correct = 0
                elif condition_new_t2 == 'm':
                    if key_resp_trial_training.keys == 'm':
                        correct = 1
                    else:
                        correct = 0

        thisExp.addData('condition_new_t2', condition_new_t2)
        thisExp.addData('correct', correct)
    ImageComponent l_image_fb2_after_deval
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_fb2_after_deval
      pos = (0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine end_training
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    KeyboardComponent key_resp_end_training
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_end_training
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the task will continue and both foods are available again and you need to avoid receiving them. Remember: You now need to prevent receiving the food that is delivered on the left plate and the food that is delivered to the right, as both are available again.

        Remember that you now can prevent food delivery by performing the correct response while the cue is on screen. If you do not respond before the cue disappears, your response will not be recorded and you could get the food as a snack later.

        Press SPACE to continue
  Routine start_experiment
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    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_start
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, at the end of the experiment, we will randomly choose one trial and your response to this trial will determine whether you receive a reward or not.



        Press SPACE to start the experiment
  Routine instructions1
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    KeyboardComponent key_resp_inst1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_inst1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will avoid receiving two different kinds of food. One food will be delivered on on the left side and one on the right side. You will see several different images (also called 'cues') that signal which food will be delivered. Your job is to prevent receiving food by making the correct button-press response while the cue is on the screen.



        Press SPACE to continue
  Routine instructions2
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    KeyboardComponent key_resp_ins2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_ins2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Each cue consistently signals that a specific food will be delivered, or that no food will be delivered. Your goal is to learn when to press the left (X) key to avoid receiving food on the left plate or the right (M) key to avoid receiving food on the right plate, depending on the particular cue on screen. Successfully pressing the correct key in time means you prevent food delivery.

        Press SPACE to continue
  Routine instructions3
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    KeyboardComponent key_resp_ins3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_inst3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        At the end of the task, one trial will be randomly selected from all the trials you have completed and your action on the selected trial will determine your snack today. If you successfully prevented food delivery on that trial, you will not have to eat the food as a snack. However, an incorrect response in this trial means that you will have to eat the food as a snack. Your attention and accuracy are crucial in determining your snack today.


        Press SPACE to continue
  Routine feedback_with_late
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    ImageComponent image_feedback_with_late
      image [set every repeat] = $stimulus_practice
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75 - key_resp_trial_practice.rt
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    CodeComponent code_feedback_with_late
      Code Type = Both
      Begin JS Routine:
        continueRoutine = false;
        if (((key_resp_trial_practice.keys !== undefined) && (key_resp_trial_practice.rt < 0.75))) {
            continueRoutine = true;
        }

        //psychoJS.experiment.addData("randomization", randomization);
        //psychoJS.experiment.addData("CR1", CR1);
        //psychoJS.experiment.addData("CR2", CR2);
        //psychoJS.experiment.addData("CR3", CR3);
        psychoJS.experiment.addData("phase", "practice1");
      Begin Routine:
        continueRoutine = False

        if key_resp_trial_practice.keys is not None and key_resp_trial_practice.rt < 0.75:
            continueRoutine = True

        #thisExp.addData('randomization', randomization)
        #thisExp.addData('CR1', CR1)
        #thisExp.addData('CR2', CR2)
        #thisExp.addData('CR3', CR3)
        thisExp.addData('phase', 'practice1')
  Routine feedback2_with_late
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    CodeComponent code_feedback2_with_late
      Code Type = Both
      Begin JS Routine:
        correct = 1;
        if ((key_resp_trial_practice.keys === undefined)) {
            correct = 0;
            image_feedback2_with_late.setImage("resources/late.png");
        } else {
            image_feedback2_with_late.setImage("resources/blank.png");
        }

        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        correct = 1

        if key_resp_trial_practice.keys is None:
            correct = 0
            image_feedback2_with_late.setImage('resources/late.png')
        else:
            image_feedback2_with_late.setImage('resources/blank.png')

        thisExp.addData("correct", correct)
    ImageComponent image_feedback2_with_late
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine from_p1_to_p2
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    KeyboardComponent key_resp_from_p1_to_p2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_from_p1_to_p2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the end of the first practice session. Now you will start with the second practice session that fully resembles the real task.

        You will not receive the 'Too late' feedback anymore. Not responding in time counts as an incorrect response if the cue presented indicating that you needed to make a particular response.


        Press SPACE to continue
  Routine pilot
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    KeyboardComponent key_resp_pilot
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_pilot
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Important!


        You are currently part of a pilot phase for a larger online study. Please note that in this pilot stage, the food mentioned later will not actually be your snack at the end of the experiment. However, we encourage you to participate as if you would actually eat this food at the end of the experiment.

        We appreciate your cooperation and understanding.


        Press SPACE to continue
  Routine fixation_with_count_correct
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    CodeComponent code_duration_image
      Code Type = Auto->JS
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      Begin Experiment:
        repeat = 0
        total_correct = 0
      End Routine:
        duration_image = 0.75 + repeat * 0.1
        thisExp.addData('duration_image_practice', duration_image)
    PolygonComponent fixation_cross_with_count_correct
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine instructions4
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    KeyboardComponent key_resp_inst4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_inst4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will first see examples of some trials to get familiar with giving responses. This is important because you have less than 1 second in the real task. If you do not respond in time you will have food delivered on the plate.

        Make sure to respond while the cue is on the screen. For this part, it does not matter whether you press the left (X) or right (M) key, it is just important that you respond in time. Therefore, in this practice session you will not see the food when you respond incorrectly, but if you do not respond in time, you will see a 'Too late' message.


        Press SPACE to continue
  Routine to_exposure
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    KeyboardComponent key_resp_to_exposure
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_to_exposure
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will see an example of cues and the food delivery they signal. You cannot respond to these trials.



        Press SPACE to continue
  Routine fb_exposure_practice
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    CodeComponent code_exposure_practice
      Code Type = Both
      Begin JS Routine:
        condition_new_p = cr_mapping.hasOwnProperty(mapping_practice) ? cr_mapping[mapping_practice] : 'safe';

        if ((condition_new_p === "safe")) {
            l_image_fb_exposure_practice.setImage("resources/p_plate.png");
            r_image_fb_exposure_practice.setImage("resources/p_plate.png");
        }
        if ((condition_new_p === "x")) {
            l_image_fb_exposure_practice.setImage("resources/p_food_left.png");
            r_image_fb_exposure_practice.setImage("resources/p_plate.png");
        } else {
            if ((condition_new_p === "m")) {
                l_image_fb_exposure_practice.setImage("resources/p_plate.png");
                r_image_fb_exposure_practice.setImage("resources/p_food_right.png");
            }
        }
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new_p = cr_mapping.get(mapping_practice, 'safe')

         # Assume the response is correct initially
        if condition_new_p == 'safe':
            # You can add code here if needed for the 'safe' condition
            l_image_fb_exposure_practice.setImage('resources/p_plate.png')
            r_image_fb_exposure_practice.setImage('resources/p_plate.png')
        if condition_new_p == 'x':
            l_image_fb_exposure_practice.setImage('resources/p_food_left.png')
            r_image_fb_exposure_practice.setImage('resources/p_plate.png')
        elif condition_new_p == 'm':
            l_image_fb_exposure_practice.setImage('resources/p_plate.png')
            r_image_fb_exposure_practice.setImage('resources/p_food_right.png')
    ImageComponent l_image_fb_exposure_practice
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_fb_exposure_practice
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine to_real_practice
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    TextComponent text_to_real_practice
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you can guard your money by performing the correct response while the cue is on screen. If you do not respond before the cue disappears, your response will not be recorded.


        Press SPACE to continue
    KeyboardComponent key_resp_to_real_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine to_training_exposure
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    KeyboardComponent key_resp_to_training_exposure
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_to_training_exposure
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will see an example of cues and the food delivery they signal. You cannot respond to these trials.



        Press SPACE to continue
  Routine fb_training_exposure
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    CodeComponent code_training_exposure
      Code Type = Both
      Begin JS Routine:
        condition_new_t = cr_mapping.hasOwnProperty(mapping_training) ? cr_mapping[mapping_training] : 'safe';

        if ((condition_new_t === "safe")) {
            l_image_training_exposure.setImage("resources/plate.png");
            r_image_training_exposure.setImage("resources/plate.png");
        }
        if ((condition_new_t === "x")) {
            l_image_training_exposure.setImage(left_food);
            r_image_training_exposure.setImage("resources/plate.png");
        } else {
            if ((condition_new_t === "m")) {
                l_image_training_exposure.setImage("resources/plate.png");
                r_image_training_exposure.setImage(right_food);
            }
        }
      Begin Routine:
        # Update 'condition' to reflect the correct transformed value
        condition_new_t = cr_mapping.get(mapping_training, 'safe')  # Default to 'safe' if condition not found

        if condition_new_t == 'safe':
            l_image_training_exposure.setImage('resources/plate.png')
            r_image_training_exposure.setImage('resources/plate.png')
        if condition_new_t == 'x':
            l_image_training_exposure.setImage(left_food)
            r_image_training_exposure.setImage('resources/plate.png')
        elif condition_new_t == 'm':
            l_image_training_exposure.setImage('resources/plate.png')
            r_image_training_exposure.setImage(right_food)
    ImageComponent l_image_training_exposure
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent r_image_training_exposure
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine to_real_training
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    TextComponent text_to_real_training
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you can prevent food delivery by performing the correct response while the cue is on screen. If you do not respond before the cue disappears, your response will not be recorded.


        Press SPACE to continue
    KeyboardComponent key_resp_to_real_training
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine show_not_deval_2
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    CodeComponent code_show_not_deval_2
      Code Type = Auto->JS
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      Begin Routine:
        if DEVAL == 1:
            image_show_not_deval_2.setImage(left_food)
            pos_image_show_non_deval_2 = (-0.25, 0)
        elif DEVAL == 2:
            image_show_not_deval_2.setImage(right_food)
            pos_image_show_non_deval_2 = (0.25, 0)
    KeyboardComponent key_resp_show_not_deval_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_show_not_deval_2
      pos [set every repeat] = pos_image_show_non_deval_2
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_show_non_deval_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you only need to avoid receiving this food.








        Press SPACE to continue
  Routine image_trial_exposure
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    ImageComponent image_trial_training_exp
      image [set every repeat] = $stimulus_training
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine trial_practice_exp
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    ImageComponent image_trial_practice_exp
      image [set every repeat] = $stimulus_practice
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine test_deval_1
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    ImageComponent l_image_test_deval
      image = $left_food
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent r_image_test_deval
      image = $right_food
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_test_deval
      allowedKeys = 'x', 'm'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_test_deval
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which food is still available? Press X for the food on the left and M for the food on the right.
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  Routine test_deval_2
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    ImageComponent l_image_test_deval_2
      image = $left_food
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent r_image_test_deval_2
      image = $right_food
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_test_deval_2
      allowedKeys = 'x', 'm'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_test_deval_2
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which food is still available? Press X for the food on the left and M for the food on the right.
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  Routine outcome_test_deval_1
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    CodeComponent code_outcome_test_deval
      Code Type = Both
      Begin JS Routine:
        if (repeat_deval < 5) {
            if (correct_deval_key === key_resp_test_deval.keys) {
                txt_outcome_test_deval = 'Correct! You can continue with the experiment.\n\n\n\nPress SPACE to continue';
                trials_repeat_deval.finished = true;
            } else {
                txt_outcome_test_deval = 'Incorrect! We will repeat instructions again.\n\n\n\nPress SPACE to repeat instructions';
                trials_repeat_deval.finished = false;
                repeat_deval += 1;
            }
        } else if (repeat_deval === 5) {
            // End the experiment
                    // Display closing message
            alert("You did not correctly respond after 5 attempts. We appreciate your participation and effort. The experiment will now end.");
            psychoJS.quit({
                message: 'Experiment ended after incorrect responses.'
            });
        }
      Begin Routine:
        if repeat_deval < 5:
            if correct_deval_key == key_resp_test_deval.keys:
                txt_outcome_test_deval = 'Correct! You can continue with the experiment.\n\n\n\nPress SPACE to continue'
                trials_repeat_deval.finished = True
            else:
                txt_outcome_test_deval = 'Incorrect! We will repeat instructions again.\n\n\n\nPress SPACE to repeat instructions'
                trials_repeat_deval.finished = False
                repeat_deval += 1
        elif repeat_deval == 5:
            # End the experiment
            thisExp.abort()  # safely close the experiment
            win.close()      # close the window
            core.quit()      # and quit
    KeyboardComponent key_resp_outcome_test_deval
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_outcome_test_deval
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $txt_outcome_test_deval
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  Routine show_non_deval_1
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    CodeComponent code_show_non_deval
      Code Type = Auto->JS
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      Begin Routine:
        if DEVAL == 1:
            image_show_non_deval.setImage(right_food)
            pos_image_show_non_deval = (0.25, 0)
        elif DEVAL == 2:
            image_show_non_deval.setImage(left_food)
            pos_image_show_non_deval = (-0.25, 0)
    KeyboardComponent key_resp_show_non_deval
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_show_non_deval
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you only need to avoid receiving this food.











        Press SPACE to continue
    ImageComponent image_show_non_deval
      pos [set every repeat] = pos_image_show_non_deval
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine outcome_test_deval_2
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    CodeComponent code_outcome_test_deval_2
      Code Type = Both
      Begin JS Routine:
        if (repeat_deval_2 < 5) {
            if (correct_deval_key_2 === key_resp_test_deval_2.keys) {
                txt_outcome_test_deval_2 = 'Correct! You can continue with the experiment.\n\n\n\nPress SPACE to continue';
                trials_repeat_deval_2.finished = true;
            } else {
                txt_outcome_test_deval_2 = 'Incorrect! We will repeat instructions again.\n\n\n\nPress SPACE to repeat instructions';
                trials_repeat_deval_2.finished = false;
                repeat_deval_2 += 1;
            }
        } else if (repeat_deval_2 === 5) {
            // End the experiment
                    // Display closing message
            alert("You did not correctly respond after 5 attempts. We appreciate your participation and effort. The experiment will now end.");
            psychoJS.quit({
                message: 'Experiment ended after incorrect responses.'
            });
        }
      Begin Routine:
        if repeat_deval_2 < 5:
            if correct_deval_key_2 == key_resp_test_deval_2.keys:
                txt_outcome_test_deval_2 = 'Correct! You can continue with the experiment.\n\n\n\nPress SPACE to continue'
                trials_repeat_deval_2.finished = True
            else:
                txt_outcome_test_deval_2 = 'Incorrect! We will repeat instructions again.\n\n\n\nPress SPACE to repeat instructions'
                trials_repeat_deval_2.finished = False
                repeat_deval_2 += 1
        elif repeat_deval_2 == 5:
            # End the experiment
            thisExp.abort()  # safely close the experiment
            win.close()      # close the window
            core.quit()      # and quit
    KeyboardComponent key_resp_outcome_test_deval_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_outcome_test_deval_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_outcome_test_deval_2
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  Routine to_start
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    KeyboardComponent key_resp_to_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_to_start
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start the experiment
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  Routine instruction3_1
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    TextComponent text_instruction3_1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you do not prevent the food delivery, you will see the food on a plate.












        Press SPACE to continue
    ImageComponent image_instructions3_1
      image = resources/p_food_left.png
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instruction3_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3_2
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    KeyboardComponent key_resp_instruction3_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_instruction3_2
      image = resources/p_plate.png
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_instruction3_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you are successful, you will see an empty plate.












        Press SPACE to continue
  Routine explanation_deval_fb
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    KeyboardComponent key_resp_explanation_deval_fb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_explanation_deval_fb
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Although one of the foods can still be delivered, you will no longer see if this happens. This means that you won't see the food if you respond incorrectly. Likewise, you won't see an empty plate like so far if you respond correctly. However, the delivery will still be happening and if you do not prevent delivery of the food that is still available, you may receive it later as a snack.


        Press SPACE to continue
  Routine explanation_deval_fb_2
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    KeyboardComponent key_resp_explanation_deval_fb_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_explanation_deval_fb_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Although one of the piggybanks can still get robbed, you will no longer see if this happens. This means that you won't see a hand taking your money if you respond incorrectly. Likewise, you won't see a crossed out hand like so far if you respond correctly. However, the stealing will still be happening and if you do not protect the unsealed piggybank, you will lose your money.
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Flow
  Routine welcome
  Routine pilot
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instruction3_1
  Routine instruction3_2
  Routine instructions4
  LoopInitiator trials_practice_with_late loopType="TrialHandler"
    conditionsFile = resources/practice_data.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('stimulus_practice', 'resources/dummy1.png'), ('mapping_practice', 'CR1')]),
      OrderedDict([('stimulus_practice', 'resources/dummy2.png'), ('mapping_practice', 'CR2')]),
      OrderedDict([('stimulus_practice', 'resources/dummy3.png'), ('mapping_practice', 'CR3')])]
    Routine fixation
    Routine trial_practice
    Routine feedback_with_late
    Routine onset
    Routine feedback2_with_late
  LoopTerminator trials_practice_with_late
  Routine from_p1_to_p2
  Routine to_exposure
  LoopInitiator trials_practice_exposure loopType="TrialHandler"
    conditionsFile = resources/practice_data.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus_practice', 'resources/dummy1.png'), ('mapping_practice', 'CR1')]),
      OrderedDict([('stimulus_practice', 'resources/dummy2.png'), ('mapping_practice', 'CR2')]),
      OrderedDict([('stimulus_practice', 'resources/dummy3.png'), ('mapping_practice', 'CR3')])]
    Routine fixation
    Routine trial_practice_exp
    Routine onset
    Routine fb_exposure_practice
  LoopTerminator trials_practice_exposure
  Routine to_real_practice
  LoopInitiator trials_outer_practice loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator trials_practice loopType="TrialHandler"
      conditionsFile = resources/practice_data.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('stimulus_practice', 'resources/dummy1.png'), ('mapping_practice', 'CR1')]),
        OrderedDict([('stimulus_practice', 'resources/dummy2.png'), ('mapping_practice', 'CR2')]),
        OrderedDict([('stimulus_practice', 'resources/dummy3.png'), ('mapping_practice', 'CR3')])]
      Routine fixation_with_count_correct
      Routine trial_practice
      Routine feedback_practice
      Routine onset
      Routine feedback2_practice
    LoopTerminator trials_practice
    Routine repeat_or_not
  LoopTerminator trials_outer_practice
  Routine to_training
  Routine to_training_exposure
  LoopInitiator trials_exposure_training loopType="TrialHandler"
    conditionsFile = resources/exp_training_data.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('mapping_training', 'CR3')])]
    Routine fixation
    Routine image_trial_exposure
    Routine onset
    Routine fb_training_exposure
  LoopTerminator trials_exposure_training
  Routine to_real_training
  LoopInitiator trials_training_1 loopType="TrialHandler"
    conditionsFile = resources/training_data.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('mapping_training', 'CR3')]),
      OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('mapping_training', 'CR3')]),
      OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('mapping_training', 'CR3')])]
    Routine fixation
    Routine trial_training
    Routine feedback_training
    Routine onset
    Routine feedback2_training
  LoopTerminator trials_training_1
  LoopInitiator trials_repeat_deval loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine training_deval
    Routine show_non_deval_1
    Routine explanation_deval_fb
    Routine test_deval_1
    Routine outcome_test_deval_1
  LoopTerminator trials_repeat_deval
  LoopInitiator trials_training2 loopType="TrialHandler"
    conditionsFile = resources/devaluation_training_data.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('feedback_training', 'resources/Set2A_faded.png'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('feedback_training', 'resources/Set2B_faded.png'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('feedback_training', 'resources/Set2C_faded.png'), ('mapping_training', 'CR3')]),
      OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('feedback_training', 'resources/Set2A_faded.png'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('feedback_training', 'resources/Set2B_faded.png'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('feedback_training', 'resources/Set2C_faded.png'), ('mapping_training', 'CR3')]),
      OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('feedback_training', 'resources/Set2A_faded.png'), ('mapping_training', 'CR1')]),
      OrderedDict([('stimulus_training', 'resources/Set2B.jpg'), ('feedback_training', 'resources/Set2B_faded.png'), ('mapping_training', 'CR2')]),
      OrderedDict([('stimulus_training', 'resources/Set2C.jpg'), ('feedback_training', 'resources/Set2C_faded.png'), ('mapping_training', 'CR3')]),
      OrderedDict([('stimulus_training', 'resources/Set2A.jpg'), ('feedback_training', 'resources/Set2A_faded.png'), ('mapping_training', 'CR1')])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
    Routine fixation
    Routine trial_training
    Routine fb_t_after_deval
    Routine onset
    Routine fb2_t_after_deval
  LoopTerminator trials_training2
  Routine end_training
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    Routine instruction_exp
    LoopInitiator loop_rating loopType="TrialHandler"
      conditionsFile = resources/rating.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('rating_stimulus', 'resources/Set2A.jpg'), ('rating_condition', 'CR1')]),
        OrderedDict([('rating_stimulus', 'resources/Set2B.jpg'), ('rating_condition', 'CR2')]),
        OrderedDict([('rating_stimulus', 'resources/Set2C.jpg'), ('rating_condition', 'CR3')])]
      Routine rating
    LoopTerminator loop_rating
    Routine to_start
    LoopInitiator trials_1 loopType="TrialHandler"
      conditionsFile = resources/trial_data.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2C.jpg'), ('mapping', 'CR3')]),
        OrderedDict([('stimulus', 'resources/Set2B.jpg'), ('mapping', 'CR2')]),
        OrderedDict([('stimulus', 'resources/Set2A.jpg'), ('mapping', 'CR1')])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
      Routine fixation
      Routine trial
      Routine feedback
      Routine onset
      Routine feedback2
    LoopTerminator trials_1
  LoopTerminator block
  LoopInitiator trials_repeat_deval_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine devaluation
    Routine show_not_deval_2
    Routine explanation_deval_fb
    Routine test_deval_2
    Routine outcome_test_deval_2
  LoopTerminator trials_repeat_deval_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/trial_data.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine fixation
    Routine trial
    Routine feedback_after_devaluation
    Routine onset
    Routine feedback_2_after
  LoopTerminator trials_2
  Routine to_ratings
  LoopInitiator trials_exp_rating loopType="TrialHandler"
    conditionsFile = resources/rating.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('rating_stimulus', 'resources/Set2A.jpg'), ('rating_condition', 'CR1')]),
      OrderedDict([('rating_stimulus', 'resources/Set2B.jpg'), ('rating_condition', 'CR2')]),
      OrderedDict([('rating_stimulus', 'resources/Set2C.jpg'), ('rating_condition', 'CR3')])]
    Routine expectancy_rating
  LoopTerminator trials_exp_rating
  Routine urge_rating
  Routine urge_sup_rating
  Routine end
